# Sourced from https://opentopas.readthedocs.io/en/stable/examples-docs/Patient/HUtoMaterialSchneider.html
#
# Topas parameter settings for conversion of Hounsfield Units to materials using the Schneider paper

s:Ge/Patient/ImagingToMaterialConverter = "Schneider"

# Correction Factor for the relative stopping power of Geant4 and the XiO planning system:
dv:Ge/Patient/DensityCorrection = 3996 9.35212 5.55269 4.14652 3.41395 2.9645 2.66061 2.44144 2.27588 2.1464 2.04239 1.95698 1.8856 1.82506 1.77307 1.72791 1.68835 
1.6534 1.62229 1.59442 1.56932 1.54659 1.52591 1.50701 1.48968 1.47373 1.45899 1.44534 1.43265 1.42084 1.40981 1.39949 1.3898 1.38071 1.37214 1.36406 1.35643 1.34921 
1.34237 1.33587 1.3297 1.32383 1.31824 1.31291 1.30781 1.30295 1.29829 1.29383 1.28956 1.28546 1.28152 1.1284 1.12519 1.12209 1.11912 1.11625 1.11348 1.11081 1.10823 
1.10574 1.10333 1.101 1.09875 1.09657 1.09445 1.0924 1.09041 1.08848 1.08661 1.08479 1.08303 1.08131 1.07964 1.07801 1.07643 1.0749 1.0734 1.07194 1.07052 1.06913 
1.06778 1.06646 1.06518 1.06392 1.0627 1.0615 1.06033 1.05919 1.05808 1.05698 1.05592 1.05487 1.05386 1.05286 1.05188 1.05092 1.04999 1.04907 1.04817 1.04728 1.04643 
1.04558 1.04475 1.04394 1.04314 1.04235 1.04158 1.04084 1.04009 1.03936 1.03866 1.03796 1.03726 1.0366 1.03593 1.03527 1.03463 1.03401 1.03339 1.03277 1.03218 1.03159 
1.03101 1.03044 1.02988 1.02933 1.02878 1.02825 1.02772 1.0272 1.0267 1.02619 1.0257 1.02522 1.02473 1.02426 1.02379 1.02334 1.02288 1.02243 1.022 1.02156 1.02113 
1.02072 1.02029 1.01988 1.01948 1.01909 1.01869 1.0183 1.01793 1.01754 1.01717 1.0168 1.01644 1.01608 1.01572 1.01538 1.01503 1.01469 1.01436 1.01403 1.01369 1.01337 
1.01306 1.01273 1.01242 1.01212 1.01181 1.0115 1.01121 1.01092 1.01062 1.01033 1.01006 1.00977 1.00949 1.00922 1.00895 1.00867 1.00842 1.00815 1.00789 1.00763 1.00738 
1.00713 1.00687 1.00663 1.00639 1.00614 1.00591 1.00568 1.00544 1.0052 1.00498 1.00476 1.00453 1.00431 1.00409 1.00387 1.00366 1.00345 1.00323 1.00302 1.00282 1.00261 
1.00241 1.00221 1.00201 1.00181 1.00162 1.00143 1.00123 1.00104 1.00086 1.00067 1.00049 1.0003 1.00012 0.99994 0.99977 0.99959 0.99941 0.99924 0.99907 0.9989 0.99873 
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1.06268 1.06271 1.06274 1.06277 1.06279 1.06282 1.06285 1.06287 1.0629 1.06292 1.06295 1.06297 1.063 1.06302 1.06305 1.06308 1.06311 1.06313 1.06316 1.06319 1.06321 
1.06324 1.06326 1.06329 1.06331 1.06334 1.06315 1.06295 1.06275 1.06255 1.00275 g/cm3

# Formula: Density = (Offset + (Factor*(FactorOffset + HU[-1000,2995] ))) * DensityCorrection
iv:Ge/Patient/SchneiderHounsfieldUnitSections = 8 -1000 -98 15 23 101 2001 2995 2996
uv:Ge/Patient/SchneiderDensityOffset = 7 0.00121 1.018 1.03 1.003 1.017 2.201 4.54
uv:Ge/Patient/SchneiderDensityFactor = 7 0.001029700665188 0.000893 0.0 0.001169 0.000592 0.0005 0.0
uv:Ge/Patient/SchneiderDensityFactorOffset = 7 1000. 0. 1000. 0. 0. -2000. 0.

# Define Materials used for HU
sv:Ge/Patient/SchneiderElements = 13 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Calcium" "Sodium" "Potassium" "Titanium"
iv:Ge/Patient/SchneiderHUToMaterialSections = 26 -1000 -950 -120 -83 -53 -23 7 18 80 120 200 300 400 500 600 700 800 900 1000 1100 1200 1300 1400 1500 2995 2996
uv:Ge/Patient/SchneiderMaterialsWeight1  = 13 0.0      0.0    0.755    0.232  0.0       0.0       0.0    0.0      0.013  0.0	 0.0    0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight2  = 13 0.103    0.105  0.031    0.749  0.0       0.002     0.003  0.003    0.0    0.0	 0.002  0.002	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight3  = 13 0.116    0.681  0.002    0.198  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight4  = 13 0.113    0.567  0.009    0.308  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient/SchneiderMaterialsWeight5  = 13 0.110    0.458  0.015    0.411  0.0       0.001     0.002  0.002    0.0    0.0     0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight6  = 13 0.108    0.356  0.022    0.509  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight7  = 13 0.106    0.284  0.026    0.578  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight8  = 13 0.103    0.134  0.030    0.723  0.0       0.002     0.002  0.002    0.0    0.0     0.002  0.002     0.0
uv:Ge/Patient/SchneiderMaterialsWeight9  = 13 0.094    0.207  0.062    0.622  0.0       0.0       0.006  0.003    0.0    0.0     0.006  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight10 = 13 0.095    0.455  0.025    0.355  0.0       0.021     0.001	 0.001	  0.0    0.045   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight11 = 13 0.089    0.423  0.027    0.363  0.0       0.030	  0.001	 0.001	  0.0    0.064   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight12 = 13 0.082    0.391  0.029    0.372  0.0       0.039	  0.001	 0.001	  0.0    0.083   0.001  0.001     0.0
uv:Ge/Patient/SchneiderMaterialsWeight13 = 13 0.076    0.361  0.030    0.380  0.001     0.047	  0.002	 0.001	  0.0    0.101   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight14 = 13 0.071    0.335  0.032    0.387  0.001     0.054	  0.002	 0.0	  0.0    0.117   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight15 = 13 0.066    0.310  0.033    0.394  0.001     0.061	  0.002	 0.0	  0.0    0.132   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight16 = 13 0.061    0.287  0.035    0.400  0.001     0.067	  0.002	 0.0	  0.0    0.146   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight17 = 13 0.056    0.265  0.036    0.405  0.002     0.073	  0.003	 0.0	  0.0    0.159   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight18 = 13 0.052    0.246  0.037    0.411  0.002     0.078	  0.003	 0.0	  0.0    0.170   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight19 = 13 0.049    0.227  0.038    0.416  0.002     0.083	  0.003	 0.0	  0.0    0.181   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight20 = 13 0.045    0.210  0.039    0.420  0.002     0.088	  0.003	 0.0	  0.0    0.192   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight21 = 13 0.042    0.194  0.040    0.425  0.002     0.092	  0.003	 0.0	  0.0    0.201   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight22 = 13 0.039    0.179  0.041    0.429  0.002     0.096	  0.003	 0.0	  0.0    0.210   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight23 = 13 0.036    0.165  0.042    0.432  0.002     0.100	  0.003	 0.0	  0.0    0.219   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight24 = 13 0.034    0.155  0.042    0.435  0.002     0.103	  0.003	 0.0	  0.0    0.225   0.001  0.0       0.0
uv:Ge/Patient/SchneiderMaterialsWeight25 = 13 0.0      0.0    0.0      0.0    0.0       0.0	  0.0	 0.0	  0.0    0.0     0.0    0.0       1.0

iv:Gr/Color/PatientTissue1 = 3  63  63  63
iv:Gr/Color/PatientTissue2 = 3 100   0   0
iv:Gr/Color/PatientTissue3 = 3 100  30   0
iv:Gr/Color/PatientTissue4 = 3 100  60   0
iv:Gr/Color/PatientTissue5 = 3 100  90   0
iv:Gr/Color/PatientTissue6 = 3 100 120   0
iv:Gr/Color/PatientTissue7 = 3 100 150   0
iv:Gr/Color/PatientTissue8 = 3 100 180   0
iv:Gr/Color/PatientTissue9 = 3 100 210   0
iv:Gr/Color/PatientTissue10= 3 100 240   0
iv:Gr/Color/PatientTissue11= 3 200 200   0
iv:Gr/Color/PatientTissue12= 3 200 200  30
iv:Gr/Color/PatientTissue13= 3 200 200  60
iv:Gr/Color/PatientTissue14= 3 200 200  90
iv:Gr/Color/PatientTissue15= 3 200 200 120
iv:Gr/Color/PatientTissue16= 3 200 200 150
iv:Gr/Color/PatientTissue17= 3 200 200 180
iv:Gr/Color/PatientTissue18= 3 200 200 210
iv:Gr/Color/PatientTissue19= 3 200 200 240
iv:Gr/Color/PatientTissue20= 3 230 200 240
iv:Gr/Color/PatientTissue21= 3 230 230 240
iv:Gr/Color/PatientTissue22= 3 230 230 240
iv:Gr/Color/PatientTissue23= 3 240 240 240
iv:Gr/Color/PatientTissue24= 3 255 255 255
iv:Gr/Color/PatientTissue25= 3 100 100 100
